PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay discounting task lab  class main
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't' , 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Condition file for delay discounting task.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 21)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 62)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 89)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 119)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 162)]),
      OrderedDict([('reward_today', 63), ('future_reward', 82), ('delay', 177)]),
      OrderedDict([('reward_today', 15), ('future_reward', 33), ('delay', 53)]),
      OrderedDict([('reward_today', 45), ('future_reward', 72), ('delay', 241)]),
      OrderedDict([('reward_today', 50), ('future_reward', 70), ('delay', 89)]),
      OrderedDict([('reward_today', 45), ('future_reward', 77), ('delay', 305)]),
      OrderedDict([('reward_today', 34), ('future_reward', 95), ('delay', 112)]),
      OrderedDict([('reward_today', 59), ('future_reward', 85), ('delay', 29)]),
      OrderedDict([('reward_today', 26), ('future_reward', 57), ('delay', 332)]),
      OrderedDict([('reward_today', 41), ('future_reward', 67), ('delay', 254)]),
      OrderedDict([('reward_today', 68), ('future_reward', 72), ('delay', 98)]),
      OrderedDict([('reward_today', 28), ('future_reward', 35), ('delay', 219)]),
      OrderedDict([('reward_today', 59), ('future_reward', 65), ('delay', 174)]),
      OrderedDict([('reward_today', 71), ('future_reward', 81), ('delay', 188)])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
    Routine trial
  LoopTerminator trials
